PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = n-back_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent Fixation
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $thisletter
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    MouseComponent mouse_resp
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine welcome
    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Bienvenue dans la tâche de "n2-back"

        Vous devez vérifier si la lettre présente correspond à celle présentée deux lettres auparavant.

        exemple : S - N - B - M - B

        En cas de correspondance, vous devez appuyer sur la gâchette droite.


        Appuyer sur la gâchette droite pour commencer.
    MouseComponent mouse_resp_welcome
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine end
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg='dodo'
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $msg
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    MouseComponent mouse_resp_end
      clickable = text_end_quit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent text_end_quit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Cliquer pour quitter.
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'thisletter': 'L', 'target': 0, 'corrAns': None},
      {'thisletter': 'J', 'target': 0, 'corrAns': None},
      {'thisletter': 'N', 'target': 0, 'corrAns': None},
      {'thisletter': 'K', 'target': 0, 'corrAns': None},
      {'thisletter': 'N', 'target': 1, 'corrAns': 'space'},
      {'thisletter': 'V', 'target': 0, 'corrAns': None},
      {'thisletter': 'M', 'target': 0, 'corrAns': None},
      {'thisletter': 'F', 'target': 0, 'corrAns': None},
      {'thisletter': 'M', 'target': 1, 'corrAns': 'space'},
      {'thisletter': 'G', 'target': 0, 'corrAns': None},
      {'thisletter': 'G', 'target': 0, 'corrAns': None},
      {'thisletter': 'T', 'target': 0, 'corrAns': None},
      {'thisletter': 'L', 'target': 0, 'corrAns': None},
      {'thisletter': 'T', 'target': 1, 'corrAns': 'space'},
      {'thisletter': 'F', 'target': 0, 'corrAns': None},
      {'thisletter': 'J', 'target': 0, 'corrAns': None},
      {'thisletter': 'M', 'target': 0, 'corrAns': None},
      {'thisletter': 'N', 'target': 0, 'corrAns': None},
      {'thisletter': 'J', 'target': 0, 'corrAns': None},
      {'thisletter': 'K', 'target': 0, 'corrAns': None},
      {'thisletter': 'J', 'target': 1, 'corrAns': 'space'}]
    Routine trial
  LoopTerminator trials
  Routine end
